PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = PseudoRivalry
  Screen = 1
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Routines
  Routine calib
    ImageComponent imageCalib
      startVal [time (s)] = 0.0
      image = src/Calibration.png
      size = (2, 2)
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  Routine rivalry
    ImageComponent imageRivalry
      startVal [time (s)] = 0.0
      image = src/Gabor_Standard_Rivalry.png
      size = (2, 2)
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  Routine pseudo
    MovieComponent moviePseudo
      movie = src/10state_trand_noise.mp4
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      backend = moviepy
      size = (2, 2)
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  Routine choice
    KeyboardComponent key_choice
      forceEndRoutine = True
      allowedKeys = 'c','r','1','2','3','4','5'
      startVal [time (s)] = 0.0
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    TextComponent prompt
      pos = (-0.9, 0.95)
      text = Enter a code
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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Flow
  LoopInitiator trial_loop loopType="TrialHandler"
    loopType = random
    nReps = 9999
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    Routine choice
    Routine calib
    Routine rivalry
    LoopInitiator pseudo_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 9999
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      Routine pseudo
    LoopTerminator pseudo_loop
  LoopTerminator trial_loop
